PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -0.6863
  expName = final_project
  keyboardBackend = PsychToolbox
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for taking the time to do the experiment!

        The following page will be providing the instructions to complete each task. Your email will be asked at the end of the experiment to enter the boba raffle.

        Press SPACEBAR to begin.
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro_Bongard
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    TextComponent textIntro
      letterHeight = 0.05
      pos = (0, 0.55)
      startVal [time (s)] = 0.0
      text = Bongard are geometric puzzles that consists of two sets of six images. Traditionally, in order to solve the puzzle you are required to identify the rule that differentiate the images on the left from those on the right. For example, for the hypothetical Bongard problem below the rule that separates the two set is "left are all white images and right are all black images."
      units = norm
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    ImageComponent imageBongardExample
      image = example_bongard.png
      pos = (0, -0.1)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent textSPACEBARContinue
      letterHeight = 0.03
      pos = (0, -0.325)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue.
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    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textInstructions
      letterHeight = 0.06
      pos = (0, 0.55)
      startVal [time (s)] = 0.0
      text = For this experiment, instead of asking you to identify the rule, we will ask you to group images you believe belong together. We will randomize the image order and ask you to use a slider to indicate if each image belongs to the left or right. Images in the same group should be assigned the same orientation. For the last Bongard problem example, both of the following answers would be considered correct.
      units = norm
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    ImageComponent image_correct_1
      image = File (4).jpg
      pos = (-0.25, -0.05)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_correct_2
      image = File (5).jpg
      pos = (0.25, -0.05)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent textFinalInstructions
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Now you are ready for the experiment! Simply press on the slide bar for the red dot to appear and drag to change its location. Have fun and press SPACEBAR to begin!
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    ImageComponent t_1
      anchor = top-left
      image [set every repeat] = $image1
      pos = (-0.9, 0.9)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_2
      anchor = top-left
      image [set every repeat] = $image2
      pos = (-0.48, 0.9)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_3
      anchor = top-left
      image [set every repeat] = $image3
      pos = (-0.06, 0.9)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_4
      anchor = top-left
      image [set every repeat] = $image4
      pos = (0.36, 0.9)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_5
      anchor = top-left
      image [set every repeat] = $image5
      pos = (-0.9, 0.27)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_6
      anchor = top-left
      image [set every repeat] = $image6
      pos = (-0.48, 0.27)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_7
      anchor = top-left
      image [set every repeat] = $image7
      pos = (-0.06, 0.27)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_8
      anchor = top-left
      image [set every repeat] = $image8
      pos = (0.36, 0.27)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_9
      anchor = top-left
      image [set every repeat] = $image9
      pos = (-0.9, -0.35)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_10
      anchor = top-left
      image [set every repeat] = $image10
      pos = (-0.48, -0.35)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_11
      anchor = top-left
      image [set every repeat] = $image11
      pos = (-0.06, -0.35)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent t_12
      anchor = top-left
      image [set every repeat] = $image12
      pos = (0.36, -0.35)
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider_1
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.725, 0.35)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_2
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.305, 0.35)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_3
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.115, 0.35)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_4
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.535, 0.35)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_5
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.725, -0.28)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_6
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.305, -0.28)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_7
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.115, -0.28)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_8
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.535, -0.28)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_9
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.725, -0.9)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_10
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (-0.305, -0.9)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_11
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.115, -0.9)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    SliderComponent slider_12
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.535, -0.9)
      size = (0.05, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1)
      units = norm
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    ImageComponent imageNext
      anchor = center-right
      image = next.png
      pos = (0.95, 0)
      size = (0.2, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouseNext
      clickable = imageNext
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ThankYou
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    TextComponent textThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in the experiment! Please enter your email below to enter the boba raffle.
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    TextboxComponent textboxEmail
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.35, 0.1)
      startVal [time (s)] = 0.0
      text = email
      units = norm
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    TextComponent textSpaceExit
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to exit the experiment.
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Intro_Bongard
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $random(12)*393
    conditionsFile = data_randomized.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image1': 'stimuli/p001_im8', 'image2': 'stimuli/p001_im4', 'image3': 'stimuli/p001_im2', 'image4': 'stimuli/p001_im6', 'image5': 'stimuli/p001_im11', 'image6': 'stimuli/p001_im10', 'image7': 'stimuli/p001_im7', 'image8': 'stimuli/p001_im1', 'image9': 'stimuli/p001_im3', 'image10': 'stimuli/p001_im12', 'image11': 'stimuli/p001_im9', 'image12': 'stimuli/p001_im5'},
      {'image1': 'stimuli/p002_im9', 'image2': 'stimuli/p002_im7', 'image3': 'stimuli/p002_im8', 'image4': 'stimuli/p002_im1', 'image5': 'stimuli/p002_im2', 'image6': 'stimuli/p002_im5', 'image7': 'stimuli/p002_im4', 'image8': 'stimuli/p002_im11', 'image9': 'stimuli/p002_im6', 'image10': 'stimuli/p002_im12', 'image11': 'stimuli/p002_im10', 'image12': 'stimuli/p002_im3'},
      {'image1': 'stimuli/p003_im1', 'image2': 'stimuli/p003_im3', 'image3': 'stimuli/p003_im11', 'image4': 'stimuli/p003_im9', 'image5': 'stimuli/p003_im5', 'image6': 'stimuli/p003_im6', 'image7': 'stimuli/p003_im2', 'image8': 'stimuli/p003_im7', 'image9': 'stimuli/p003_im8', 'image10': 'stimuli/p003_im12', 'image11': 'stimuli/p003_im10', 'image12': 'stimuli/p003_im4'},
      {'image1': 'stimuli/p004_im10', 'image2': 'stimuli/p004_im4', 'image3': 'stimuli/p004_im3', 'image4': 'stimuli/p004_im5', 'image5': 'stimuli/p004_im2', 'image6': 'stimuli/p004_im6', 'image7': 'stimuli/p004_im1', 'image8': 'stimuli/p004_im11', 'image9': 'stimuli/p004_im8', 'image10': 'stimuli/p004_im9', 'image11': 'stimuli/p004_im12', 'image12': 'stimuli/p004_im7'}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
    Routine trial
  LoopTerminator trials
  Routine ThankYou
